PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = white
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [2560, 1080]
  Full-screen window = True
  Save csv file = True
  expName = test_experiment
  Screen = 1
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Routines
  Routine trial_def
    CodeComponent def_trial
    TextComponent text
      color = grey
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $trial_count
      startVal [time (s)] = 0.0
      letterHeight = 2
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  Routine disp_stimulus
    TextComponent stimulation
      color = black
      stopVal [duration (s)] = 0.05
      text [set every repeat] = $stimulus
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent mask
      stopVal [duration (s)] = 0.034
      startVal [time (s)] = .05
      letterHeight = 0.1
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  Routine record_resp
    TextComponent Probe
      color = black
      stopVal [duration (s)] = 4
      text = What numbers did you see?
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent usr_input
      stopVal [duration (s)] = 4
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9'
      startVal [time (s)] = 1
      store = all keys
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  Routine b'stimulus_3'
    CodeComponent code
      Begin Routine:
        stim = stim_array[stim_count]
      End Routine:
        stim_count = stim_count + 1
    TextComponent stimulus
      stopVal [duration (s)] = 0.05
      text [set every repeat] = $stim
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine code_Init
    CodeComponent experiment_init
      Begin Experiment:
        # IMPORTING MY PACKAGES import random as rand import pandas as pd import string  # TEST VARIABLES trial_count = 0 # temporary value to see if it loops correctly  # USER_DEFINED OPTIONS stim_dur = 50 #duration of stimulus presentation in ms mask_dur = 34 #duration of the mask in ms trialType_stim = ['t1', 't2'] #stimulus ondition types trialType_sep  = ['long', 'short'] sep_short = 4 # number of stimuli that should seperate T1 from T2 sep_long  = 8  ##create an array of short/long interval conditions  trialType_sep  = np.repeat(a = ['short', 'long'], repeats = [192, 72]) trialType_sep  = np.repeat(a = trialType_sep, repeats = len(trialType_stim)) trialType_stim = np.repeat(a = trialType_stim, repeats = 192 + 72)  #create an array of short/long interval conditions  trialType_mat  = np.stack((trialType_stim, trialType_sep)) trialType_mat = np.transpose(trialType_mat)  # number of trials ntrials = trialType_mat.shape[0]  ######### trial_def ############ for trial in range(1,ntrials + 1): # trial_count = trial_count + 1 # stim_count  = 0 # keep track of which stimulus to display     nstim = randint(15,19)      trialType_cur = randint(0, np.shape(trialType_mat)[0]-1) # determine type of trial (eg. T2-present, long seperation)     trialType_cur = trialType_mat[trialType_cur]     stim_array    = [rand.choice(string.ascii_uppercase) for _ in range(nstim)] # begin building array of stimuli to be shown in this trial      # determine the postions for the Target stimuli     if trialType_cur[1] == 'long':         t1_pos = np.random.choice(range(1,nstim - sep_long))         t2_pos = t1_pos + sep_long     elif trialType_cur[1] == 'short':         t1_pos = np.random.choice(range(1,nstim - sep_short))         t2_pos = t1_pos + sep_short      # place the T1 target number into the stimulus array     stim_array[t1_pos - 1] = np.random.choice(range(1,9))      # put T2 in the stimulus vector     if trialType_cur[0] == 't2':         stim_array[t2_pos - 1] = np.random.choice(range(1,9))     elif trialType_cur[0] == 't1':         stim_array[t2_pos - 1] = ''      # the 20% chance of the trial including a blank stimulus     if trialType_cur[0] == 't2':         roll_die = np.random.choice(range(1,5))         if roll_die == 1:             blank_pos = range(1,nstim)              blank_pos.remove(t1_pos)             blank_pos.remove(t2_pos)             blank_pos = np.random.choice(blank_pos)             stim_array[blank_pos - 1] = ''      stim_cond = []     for elem in range(len(stim_array)):         # print(type(stim_array[elem]))         if stim_array[elem] == ' ':             stim_cond.append('mask')         elif type(stim_array[elem]) is np.int64:             stim_cond.append('target')         elif type(stim_array[elem]) is str:             stim_cond.append('distractor')      trial_col = [str(trial) for _ in range(nstim)]     stimCount_col = range(1,nstim + 1)     sep_col = [trialType_cur[1] for _ in range(nstim)]      tnum_col = [trialType_cur[0] for _ in range(nstim)]       trial_tab = np.vstack((trial_col, sep_col, tnum_col, stimCount_col, stim_array, stim_cond))     trial_tab = np.transpose(trial_tab)      try:         exp_tab = np.vstack((exp_tab, trial_tab))     except NameError:         exp_tab = trial_tab   df = pd.DataFrame(exp_tab) df.to_csv("test.csv", header = ['block', 'sep_dur', 'Tx', 'trial', 'stimulus', 'cond'], index = False)

        nreps_tot = np.shape(exp_tab)[0]
         ##########disp_stimulus ############# # stim_cur = stim_array[stim_count] #begin routine # stim_count = stim_count + 1 #end routine
Flow
  Routine code_Init
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = test.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([(u'block', 1), (u'sep_dur', u'short'), (u'Tx', u't1'), (u'trial', 1), (u'stimulus', u'4'), (u'cond', u'target')]),
      OrderedDict([(u'block', 1), (u'sep_dur', u'short'), (u'Tx', u't1'), (u'trial', 2), (u'stimulus', u'G'), (u'cond', u'distractor')]),
      OrderedDict([(u'block', 1), (u'sep_dur', u'short'), (u'Tx', u't1'), (u'trial', 3), (u'stimulus', u'K'), (u'cond', u'distractor')]),
      OrderedDict([(u'block', 1), (u'sep_dur', u'short'), (u'Tx', u't1'), (u'trial', 4), (u'stimulus', u'K'), (u'cond', u'distractor')]),
      OrderedDict([(u'block', 1), (u'sep_dur', u'short'), (u'Tx', u't1'), (u'trial', 5), (u'stimulus', u' '), (u'cond', u'mask')]),
      OrderedDict([(u'block', 1), (u'sep_dur', u'short'), (u'Tx', u't1'), (u'trial', 6), (u'stimulus', u'X'), (u'cond', u'distractor')]),
      OrderedDict([(u'block', 1), (u'sep_dur', u'short'), (u'Tx', u't1'), (u'trial', 7), (u'stimulus', u'M'), (u'cond', u'distractor')]),
      OrderedDict([(u'block', 1), (u'sep_dur', u'short'), (u'Tx', u't1'), (u'trial', 8), (u'stimulus', u'P'), (u'cond', u'distractor')]),
      OrderedDict([(u'block', 1), (u'sep_dur', u'short'), (u'Tx', u't1'), (u'trial', 9), (u'stimulus', u'J'), (u'cond', u'distractor')]),
      OrderedDict([(u'block', 1), (u'sep_dur', u'short'), (u'Tx', u't1'), (u'trial', 10), (u'stimulus', u'C'), (u'cond', u'distractor')]),
      OrderedDict([(u'block', 1), (u'sep_dur', u'short'), (u'Tx', u't1'), (u'trial', 11), (u'stimulus', u'U'), (u'cond', u'distractor')])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
    Routine disp_stimulus
  LoopTerminator trials
