PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = rsvp
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      stopVal [duration (s)] = .05
      text [set every repeat] = $stimulus[1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ITI
    TextComponent interStimInt
      stopVal [duration (s)] = 0.034
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent instrTxt
      text = Keep a mental note of any numbers that you see.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instrConf
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([(u'stimulus', u'A'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'B'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'C'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'D'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'E'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'F'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'G'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'H'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'I'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'J'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'K'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'L'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'M'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'N'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'O'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'P'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'Q'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'R'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'S'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'T'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'U'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'V'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'W'), (u'category', u'letter')]),
      OrderedDict([(u'stimulus', u'X'), (u'category', u'letter')])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
    Routine ITI
    Routine trial
  LoopTerminator trials
