PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  color = white
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1851, 1234]
  Full-screen window = True
  expName = test_experiment
  Screen = 1
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Routines
  Routine disp_stimulus
    TextComponent text_2
      color = black
      text [set every repeat] = $stimulus
      stopVal [duration (s)] = 0.05
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent mask
      stopVal [duration (s)] = 0.034
      startVal [time (s)] = .05
      letterHeight = 0.1
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  Routine code_Init
    CodeComponent experiment_init
      Begin Experiment:
        # IMPORTING MY PACKAGES
        import random as rand
        import pandas as pd
        import string

        # keeping track
        trial_count = 0
        block_count = 0

        # USER_DEFINED OPTIONS
        stim_dur = 50 #duration of stimulus presentation in ms
        mask_dur = 34 #duration of the mask in ms
        trialType_stim = ['t1', 't2'] #stimulus ondition types

        sep_short = 4 # number of stimuli that should seperate T1 from T2
        sep_long  = 8

        #create an array of short/long interval conditions

        trialType_sep  = np.repeat(a = ['short', 'long'], repeats = [192, 72])

        trialType_sep  = np.repeat(a = trialType_sep, repeats = len(trialType_stim))

        trialType_stim = np.repeat(a = trialType_stim, repeats = 192 + 72)

        #create an array of short/long interval conditions

        trialType_mat  = np.stack((trialType_stim, trialType_sep))

        trialType_mat = np.transpose(trialType_mat)

        # number of trials
        ntrials = trialType_mat.shape[0]
  Routine rec_resp_T1
    TextComponent Probe_t1
      color = black
      text = What numbers did you see?
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent usr_input_t1
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9'
      startVal [time (s)] = 1
      store = first key
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  Routine trial_def
    CodeComponent def_trial
      Begin Routine:
        trial_count = trial_count + 1
        stim_count  = 0 # keep track of which stimulus to display
        nstim = randint(15,19)

        trialType_cur = randint(0, np.shape(trialType_mat)[0]-1) # determine type of tral (eg. T2-present, long seperation)
        trialType_cur = trialType_mat[trialType_cur]
        stim_array    = [rand.choice(string.ascii_uppercase) for _ in range(nstim)] # begin building array of stimuli to be shown in this trial

        # determine the postions for the Target stimuli
        if trialType_cur[1] == 'long':
            t1_pos = np.random.choice(range(1,nstim - sep_long))
            t2_pos = t1_pos + sep_long
        elif trialType_cur[1] == 'short':
            t1_pos = np.random.choice(range(1,nstim - sep_short))
            t2_pos = t1_pos + sep_short

        # place the T1 target number into the stimulus array
        stim_array[t1_pos - 1] = np.random.choice(range(1,9))

        # put T2 in the stimulus vector
        if trialType_cur[0] == 't2':
            stim_array[t2_pos - 1] = np.random.choice(range(1,9))
        elif trialType_cur[0] == 't1':
            stim_array[t2_pos - 1] = ' '

        # the 20% chance of the trial including a blank stimulus
        if trialType_cur[0] == 't2':
            roll_die = np.random.choice(range(1,5))
            if roll_die == 1:
                blank_pos = range(1,nstim)
                blank_pos.remove(t1_pos)
                blank_pos.remove(t2_pos)
                blank_pos = np.random.choice(blank_pos)

                stim_array[blank_pos - 1] = ' '

        # create the columns to be saved
        sep_col   = [trialType_cur[1] for _ in range(nstim)]
        tnum_col  = [trialType_cur[0] for _ in range(nstim)]
        trial_col = [str(trial_count) for _ in range(nstim)]
        tnum_col  = [trialType_cur[0] for _ in range(nstim)]
        stimCount_col = range(1,nstim + 1)

        stim_cond = []
        for elem in range(len(stim_array)):
            # print(type(stim_array[elem]))
            if stim_array[elem] == ' ':
                stim_cond.append('mask')
            elif type(stim_array[elem]) is np.int64:
                stim_cond.append('target')
            elif type(stim_array[elem]) is str:
                stim_cond.append('distractor')

        # put this data into a dataframe
        trial_tab = np.vstack((trial_col, sep_col, tnum_col, stimCount_col, stim_array, stim_cond))
        trial_tab = np.transpose(trial_tab)
        trial_tab = pd.DataFrame(trial_tab)

        # save dataframe to conditions *.csv file
        trial_tab.to_csv("tmp_stimuli.csv", header = ['block', 'sep_dur', 'Tx', 'trial', 'stimulus', 'cond'], index = False)
    TextComponent text
      opacity = 0
      color = grey
      text [set every repeat] = $trial_count
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 2
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  Routine rec_resp_T2
    TextComponent Probe_t2
      color = black
      text = What numbers did you see?
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent usr_input_t2
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9'
      startVal [time (s)] = 0.0
      store = first key
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  Routine delay
    TextComponent blank
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ready_block
    CodeComponent code_2
      Begin Routine:
        block_count = block_count + 1

        ready_txt = "Block " +  str(block_count)
    TextComponent ready
      color = black
      text [set every repeat] = $ready_txt + '\n\n' + "Ready?"
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent go
      color = black
      text = GO
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent gap
      stopVal [duration (s)] = .2
      startVal [time (s)] = 1.5
      letterHeight = 0.1
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  Routine b'stimulus_3'
    CodeComponent code
      Begin Routine:
        stim = stim_array[stim_count]
      End Routine:
        stim_count = stim_count + 1
    TextComponent stimulus
      text [set every repeat] = $stim
      stopVal [duration (s)] = 0.05
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent instruct_p1
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Hello. Thank you for coming in today.

         For this task, you will be asked to observe a series of characters flash on the screen and try to identify any number(s) you see in the stream. The characters will appear quickly, so you will have to pay close attention.

         Sometimes a stream of characters will contain two numbers, and other times it will only contain one. Each stream will contain 15 to 19 characters and last for about a second.

         When two numbers are presented, please enter the numbers via keyboard in the order they were presented. When only one number is presented, enter in the number you saw along with any random number.

         If you at any point are not sure which number(s) were presented, you can just guess.

         You will be presented two blocks of this task; each block lasting between 13 to 15 minutes.


                                                                Press SPACE to continue.
    KeyboardComponent adv_p1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine code_Init
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine ready_block
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = $ntrials
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      Routine trial_def
      LoopInitiator stim loopType="TrialHandler"
        conditionsFile = tmp_stimuli.csv
        loopType = random
        nReps = 1
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        Routine disp_stimulus
      LoopTerminator stim
      Routine rec_resp_T1
      Routine rec_resp_T2
      Routine delay
    LoopTerminator trials
  LoopTerminator block
